def model MyModel1 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_per_millimole as
    unit volt {pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit centimeter as
    unit metre {pref: centi};
  enddef;
  def unit centimeter_squared as
    unit centimeter {expo: 2};
  enddef;
  def unit microliter_per_centimeter_cubed as
    unit microliter;
    unit centimeter {expo: -3};
  enddef;
  def unit microF_per_centimeter_squared as
    unit microF;
    unit centimeter_squared {expo: -1};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time:  {interface: public};
    var celltype:  {init: 0, interface: public};
  enddef;

  def comp extracellular as
    var nao:  {init: 140, interface: public};
    var cao:  {init: 1.8, interface: public};
    var ko:  {init: 5.4, interface: public};
  enddef;

  def comp physical_constants as
    var R:  {init: 8314, interface: public};
    var T:  {init: 310, interface: public};
    var F:  {init: 96485, interface: public};
    var zna:  {init: 1, interface: public};
    var zca:  {init: 2, interface: public};
    var zk:  {init: 1, interface: public};
  enddef;

  def comp cell_geometry as
    var L:  {init: 0.01};
    var rad:  {init: 0.0011};
    var vcell:  {interface: public};
    var Ageo:  {interface: public};
    var Acap:  {interface: public};
    var vmyo:  {interface: public};
    var vnsr:  {interface: public};
    var vjsr:  {interface: public};
    var vss:  {interface: public};
    vcell = 1000{microliter_per_centimeter_cubed}*3.14{dimensionless}*rad*rad*L;
    Ageo = 2{dimensionless}*3.14{dimensionless}*rad*rad+2{dimensionless}*3.14{dimensionless}*rad*L;
    Acap = 2{dimensionless}*Ageo;
    vmyo = 0.68{dimensionless}*vcell;
    vnsr = 0.0552{dimensionless}*vcell;
    vjsr = 0.0048{dimensionless}*vcell;
    vss = 0.02{dimensionless}*vcell;
  enddef;

  def comp membrane as
    var v:  {init: -87, interface: public};
    var time:  {interface: public};
    var R:  {interface: public};
    var T:  {interface: public};
    var F:  {interface: public};
    var vffrt:  {interface: public};
    var vfrt:  {interface: public};
    var INa:  {interface: public};
    var INaL:  {interface: public};
    var Ito:  {interface: public};
    var ICaL:  {interface: public};
    var ICaNa:  {interface: public};
    var ICaK:  {interface: public};
    var IKr:  {interface: public};
    var IKs:  {interface: public};
    var IK1:  {interface: public};
    var INaCa_i:  {interface: public};
    var INaCa_ss:  {interface: public};
    var INaK:  {interface: public};
    var INab:  {interface: public};
    var IKb:  {interface: public};
    var IpCa:  {interface: public};
    var ICab:  {interface: public};
    var Istim:  {interface: public};
    var amp:  {init: -80};
    var duration:  {init: 0.5};
    Istim = sel
      case time <= duration:
        amp;
      otherwise:
        0{microA_per_microF};
    endsel;
    vffrt = v*F*F/(R*T);
    vfrt = v*F/(R*T);
    ode(v, time) = -(INa+INaL+Ito+ICaL+ICaNa+ICaK+IKr+IKs+IK1+INaCa_i+INaCa_ss+INaK+INab+IKb+IpCa+ICab+Istim);
  enddef;

  def comp CaMK as
    var KmCaMK:  {init: 0.15, interface: public};
    var aCaMK:  {init: 0.05};
    var bCaMK:  {init: 0.00068};
    var CaMKo:  {init: 0.05};
    var KmCaM:  {init: 0.0015};
    var CaMKb:  {interface: public};
    var CaMKa:  {interface: public};
    var CaMKt:  {init: 0};
    var cass:  {interface: public};
    var time:  {interface: public};
    CaMKb = CaMKo*(1{millimolar}-CaMKt)/(1{dimensionless}+KmCaM/cass);
    CaMKa = CaMKb+CaMKt;
    ode(CaMKt, time) = aCaMK*CaMKb*(CaMKb+CaMKt)-bCaMK*CaMKt;
  enddef;

  def comp intracellular_ions as
    var cmdnmax_b:  {init: 0.05};
    var cmdnmax: ;
    var kmcmdn:  {init: 0.00238};
    var trpnmax:  {init: 0.07};
    var kmtrpn:  {init: 0.0005};
    var BSRmax:  {init: 0.047};
    var KmBSR:  {init: 0.00087};
    var BSLmax:  {init: 1.124};
    var KmBSL:  {init: 0.0087};
    var csqnmax:  {init: 10};
    var kmcsqn:  {init: 0.8};
    var nai:  {init: 7, interface: public};
    var nass:  {init: 7, interface: public};
    var ki:  {init: 145, interface: public};
    var kss:  {init: 145, interface: public};
    var cass:  {init: 1e-4, interface: public};
    var cansr:  {init: 1.2, interface: public};
    var cajsr:  {init: 1.2, interface: public};
    var cai:  {init: 1e-4, interface: public};
    var celltype:  {interface: public};
    var Acap:  {interface: public};
    var R:  {interface: public};
    var T:  {interface: public};
    var F:  {interface: public};
    var INa:  {interface: public};
    var INaL:  {interface: public};
    var INaCa_i:  {interface: public};
    var INaCa_ss:  {interface: public};
    var ICaNa:  {interface: public};
    var INaK:  {interface: public};
    var INab:  {interface: public};
    var IK1:  {interface: public};
    var IKb:  {interface: public};
    var IKr:  {interface: public};
    var IKs:  {interface: public};
    var Istim:  {interface: public};
    var Ito:  {interface: public};
    var ICab:  {interface: public};
    var IpCa:  {interface: public};
    var ICaL:  {interface: public};
    var JdiffNa:  {interface: public};
    var Jdiff:  {interface: public};
    var Jup:  {interface: public};
    var JdiffK:  {interface: public};
    var Jrel:  {interface: public};
    var Jtr:  {interface: public};
    var ICaK:  {interface: public};
    var time:  {interface: public};
    var vmyo:  {interface: public};
    var vnsr:  {interface: public};
    var vss:  {interface: public};
    var vjsr:  {interface: public};
    var Bcai: ;
    var Bcajsr: ;
    var Bcass: ;
    var cm:  {init: 1, interface: public};
    cmdnmax = sel
      case celltype == 1{dimensionless}:
        cmdnmax_b*1.3{dimensionless};
      otherwise:
        cmdnmax_b;
    endsel;
    ode(nai, time) = -(INa+INaL+3{dimensionless}*INaCa_i+3{dimensionless}*INaK+INab)*Acap*cm/(F*vmyo)+JdiffNa*vss/vmyo;
    ode(nass, time) = -(ICaNa+3{dimensionless}*INaCa_ss)*cm*Acap/(F*vss)-JdiffNa;
    ode(ki, time) = -(Ito+IKr+IKs+IK1+IKb+Istim-2{dimensionless}*INaK)*cm*Acap/(F*vmyo)+JdiffK*vss/vmyo;
    ode(kss, time) = -ICaK*cm*Acap/(F*vss)-JdiffK;
    Bcai = 1{dimensionless}/(1{dimensionless}+cmdnmax*kmcmdn/sqr(kmcmdn+cai)+trpnmax*kmtrpn/sqr(kmtrpn+cai));
    ode(cai, time) = Bcai*(-(IpCa+ICab-2{dimensionless}*INaCa_i)*cm*Acap/(2{dimensionless}*F*vmyo)-Jup*vnsr/vmyo+Jdiff*vss/vmyo);
    Bcass = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+cass)+BSLmax*KmBSL/sqr(KmBSL+cass));
    ode(cass, time) = Bcass*(-(ICaL-2{dimensionless}*INaCa_ss)*cm*Acap/(2{dimensionless}*F*vss)+Jrel*vjsr/vss-Jdiff);
    ode(cansr, time) = Jup-Jtr*vjsr/vnsr;
    Bcajsr = 1{dimensionless}/(1{dimensionless}+csqnmax*kmcsqn/sqr(kmcsqn+cajsr));
    ode(cajsr, time) = Bcajsr*(Jtr-Jrel);
  enddef;

  def comp reversal_potentials as
    var PKNa:  {init: 0.01833};
    var ENa:  {interface: public};
    var EK:  {interface: public};
    var EKs:  {interface: public};
    var nao:  {interface: public};
    var ko:  {interface: public};
    var nai:  {interface: public};
    var ki:  {interface: public};
    var R:  {interface: public};
    var T:  {interface: public};
    var F:  {interface: public};
    ENa = R*T/F*ln(nao/nai);
    EK = R*T/F*ln(ko/ki);
    EKs = R*T/F*ln((ko+PKNa*nao)/(ki+PKNa*nai));
  enddef;

  def comp INa as
    var mss: ;
    var tm:  {interface: public};
    var mssV1:  {init: 39.57};
    var mssV2:  {init: 9.871};
    var mtV1:  {init: 11.64};
    var mtV2:  {init: 34.77};
    var mtD1:  {init: 6.765};
    var mtD2:  {init: 8.552};
    var mtV3:  {init: 77.42};
    var mtV4:  {init: 5.955};
    var m:  {init: 0};
    var time:  {interface: public};
    var hss: ;
    var thf: ;
    var ths: ;
    var hssV1:  {init: 82.9};
    var hssV2:  {init: 6.086};
    var Ahs: ;
    var Ahf:  {init: 0.99};
    var hf:  {init: 1};
    var hs:  {init: 1};
    var h: ;
    var GNa:  {init: 75};
    var jss: ;
    var tj: ;
    var j:  {init: 1};
    var hssp: ;
    var thsp: ;
    var hsp:  {init: 1};
    var hp: ;
    var tjp: ;
    var jp:  {init: 1};
    var fINap: ;
    var INa:  {interface: public};
    var v:  {interface: public};
    var KmCaMK:  {interface: public};
    var CaMKa:  {interface: public};
    var ENa:  {interface: public};
    mss = 1{dimensionless}/(1{dimensionless}+exp(-(v+mssV1)/mssV2));
    tm = 1{millisecond}/(mtD1*exp((v+mtV1)/mtV2)+mtD2*exp(-(v+mtV3)/mtV4));
    ode(m, time) = (mss-m)/tm;
    hss = 1{dimensionless}/(1{dimensionless}+exp((v+hssV1)/hssV2));
    thf = 1{millisecond}/(1.432e-5{dimensionless}*exp(-(v+1.196{millivolt})/6.285{millivolt})+6.149{dimensionless}*exp((v+0.5096{millivolt})/20.27{millivolt}));
    ths = 1{millisecond}/(0.009794{dimensionless}*exp(-(v+17.95{millivolt})/28.05{millivolt})+0.3343{dimensionless}*exp((v+5.73{millivolt})/56.66{millivolt}));
    Ahs = 1{dimensionless}-Ahf;
    ode(hf, time) = (hss-hf)/thf;
    ode(hs, time) = (hss-hs)/ths;
    h = Ahf*hf+Ahs*hs;
    jss = hss;
    tj = 2.038{millisecond}+1{millisecond}/(0.02136{dimensionless}*exp(-(v+100.6{millivolt})/8.281{millivolt})+0.3052{dimensionless}*exp((v+0.9941{millivolt})/38.45{millivolt}));
    ode(j, time) = (jss-j)/tj;
    hssp = 1{dimensionless}/(1{dimensionless}+exp((v+89.1{millivolt})/6.086{millivolt}));
    thsp = 3{dimensionless}*ths;
    ode(hsp, time) = (hssp-hsp)/thsp;
    hp = Ahf*hf+Ahs*hsp;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    fINap = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INa = GNa*(v-ENa)*pow(m, 3{dimensionless})*((1{dimensionless}-fINap)*h*j+fINap*hp*jp);
  enddef;

  def comp INaL as
    var mLss: ;
    var tm:  {interface: public};
    var tmL: ;
    var mL:  {init: 0};
    var thL:  {init: 200};
    var hLss: ;
    var v:  {interface: public};
    var hL:  {init: 1};
    var hLssp: ;
    var thLp: ;
    var hLp:  {init: 1};
    var GNaL_b:  {init: 0.0075};
    var GNaL: ;
    var fINaLp: ;
    var KmCaMK:  {interface: public};
    var CaMKa:  {interface: public};
    var ENa:  {interface: public};
    var INaL:  {interface: public};
    var celltype:  {interface: public};
    var time:  {interface: public};
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = tm;
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1{dimensionless}/(1{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    GNaL = sel
      case celltype == 1{dimensionless}:
        GNaL_b*0.6{dimensionless};
      otherwise:
        GNaL_b;
    endsel;
    fINaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INaL = GNaL*(v-ENa)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
  enddef;

  def comp Ito as
    var Gto_b:  {init: 0.02};
    var ass: ;
    var ta: ;
    var a:  {init: 0};
    var time:  {interface: public};
    var v:  {interface: public};
    var EK:  {interface: public};
    var iss: ;
    var delta_epi: ;
    var tiF_b: ;
    var tiS_b: ;
    var tiF: ;
    var tiS: ;
    var AiF: ;
    var AiS: ;
    var iF:  {init: 1};
    var iS:  {init: 1};
    var i: ;
    var assp: ;
    var ap:  {init: 0};
    var dti_develop: ;
    var dti_recover: ;
    var tiFp: ;
    var tiSp: ;
    var iFp:  {init: 1};
    var iSp:  {init: 1};
    var ip: ;
    var Gto: ;
    var fItop: ;
    var Ito:  {interface: public};
    var celltype:  {interface: public};
    var KmCaMK:  {interface: public};
    var CaMKa:  {interface: public};
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.34{millivolt})/14.82{millivolt}));
    ta = 1.0515{millisecond}/(1{dimensionless}/(1.2089{dimensionless}*(1{dimensionless}+exp(-(v-18.4099{millivolt})/29.3814{millivolt})))+3.5{dimensionless}/(1{dimensionless}+exp((v+100{millivolt})/29.3814{millivolt})));
    ode(a, time) = (ass-a)/ta;
    iss = 1{dimensionless}/(1{dimensionless}+exp((v+43.94{millivolt})/5.711{millivolt}));
    delta_epi = sel
      case celltype == 1{dimensionless}:
        1{dimensionless}-0.95{dimensionless}/(1{dimensionless}+exp((v+70{millivolt})/5{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
    tiF_b = 4.562{millisecond}+1{millisecond}/(0.3933{dimensionless}*exp(-(v+100{millivolt})/100{millivolt})+0.08004{dimensionless}*exp((v+50{millivolt})/16.59{millivolt}));
    tiS_b = 23.62{millisecond}+1{millisecond}/(0.001416{dimensionless}*exp(-(v+96.52{millivolt})/59.05{millivolt})+1.78e-8{dimensionless}*exp((v+114.1{millivolt})/8.079{millivolt}));
    tiF = tiF_b*delta_epi;
    tiS = tiS_b*delta_epi;
    AiF = 1{dimensionless}/(1{dimensionless}+exp((v-213.6{millivolt})/151.2{millivolt}));
    AiS = 1{dimensionless}-AiF;
    ode(iF, time) = (iss-iF)/tiF;
    ode(iS, time) = (iss-iS)/tiS;
    i = AiF*iF+AiS*iS;
    assp = 1{dimensionless}/(1{dimensionless}+exp(-(v-24.34{millivolt})/14.82{millivolt}));
    ode(ap, time) = (assp-ap)/ta;
    dti_develop = 1.354{dimensionless}+1e-4{dimensionless}/(exp((v-167.4{millivolt})/15.89{millivolt})+exp(-(v-12.23{millivolt})/0.2154{millivolt}));
    dti_recover = 1{dimensionless}-0.5{dimensionless}/(1{dimensionless}+exp((v+70{millivolt})/20{millivolt}));
    tiFp = dti_develop*dti_recover*tiF;
    tiSp = dti_develop*dti_recover*tiS;
    ode(iFp, time) = (iss-iFp)/tiFp;
    ode(iSp, time) = (iss-iSp)/tiSp;
    ip = AiF*iFp+AiS*iSp;
    Gto = sel
      case celltype == 1{dimensionless}:
        Gto_b*4{dimensionless};
      case celltype == 2{dimensionless}:
        Gto_b*4{dimensionless};
      otherwise:
        Gto_b;
    endsel;
    fItop = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Ito = Gto*(v-EK)*((1{dimensionless}-fItop)*a*i+fItop*ap*ip);
  enddef;

  def comp ICaL as
    var Kmn:  {init: 0.002};
    var k2n:  {init: 1000};
    var PCa_b:  {init: 0.0001};
    var dss: ;
    var d:  {init: 0};
    var fss: ;
    var Aff: ;
    var Afs: ;
    var ff:  {init: 1};
    var fs:  {init: 1};
    var f: ;
    var fcass: ;
    var Afcaf: ;
    var Afcas: ;
    var fcaf:  {init: 1};
    var fcas:  {init: 1};
    var fca: ;
    var jca:  {init: 1};
    var ffp:  {init: 1};
    var fp: ;
    var fcafp:  {init: 1};
    var fcap: ;
    var km2n: ;
    var anca: ;
    var nca:  {init: 0};
    var PhiCaL: ;
    var PhiCaNa: ;
    var PhiCaK: ;
    var PCa: ;
    var celltype:  {interface: public};
    var PCap: ;
    var PCaNa: ;
    var PCaK: ;
    var PCaNap: ;
    var PCaKp: ;
    var fICaLp: ;
    var td: ;
    var tff: ;
    var tfs: ;
    var tfcaf: ;
    var tfcas: ;
    var tjca: ;
    var tffp: ;
    var tfcafp: ;
    var ICaL:  {interface: public};
    var ICaNa:  {interface: public};
    var ICaK:  {interface: public};
    var v:  {interface: public};
    var time:  {interface: public};
    var cass:  {interface: public};
    var cao:  {interface: public};
    var vffrt:  {interface: public};
    var vfrt:  {interface: public};
    var nao:  {interface: public};
    var nass:  {interface: public};
    var ko:  {interface: public};
    var kss:  {interface: public};
    var KmCaMK:  {interface: public};
    var CaMKa:  {interface: public};
    var R:  {interface: public};
    var T:  {interface: public};
    var F:  {interface: public};
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(v+3.94{millivolt})/4.23{millivolt}));
    td = 0.6{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+6{millivolt}))+exp(0.09{per_millivolt}*(v+14{millivolt})));
    ode(d, time) = (dss-d)/td;
    fss = 1{dimensionless}/(1{dimensionless}+exp((v+19.58{millivolt})/3.696{millivolt}));
    tff = 7{millisecond}+1{millisecond}/(0.0045{dimensionless}*exp(-(v+20{millivolt})/10{millivolt})+0.0045{dimensionless}*exp((v+20{millivolt})/10{millivolt}));
    tfs = 1000{millisecond}+1{millisecond}/(0.000035{dimensionless}*exp(-(v+5{millivolt})/4{millivolt})+0.000035{dimensionless}*exp((v+5{millivolt})/6{millivolt}));
    Aff = 0.6{dimensionless};
    Afs = 1{dimensionless}-Aff;
    ode(ff, time) = (fss-ff)/tff;
    ode(fs, time) = (fss-fs)/tfs;
    f = Aff*ff+Afs*fs;
    fcass = fss;
    tfcaf = 7{millisecond}+1{millisecond}/(0.04{dimensionless}*exp(-(v-4{millivolt})/7{millivolt})+0.04{dimensionless}*exp((v-4{millivolt})/7{millivolt}));
    tfcas = 100{millisecond}+1{millisecond}/(0.00012{dimensionless}*exp(-v/3{millivolt})+0.00012{dimensionless}*exp(v/7{millivolt}));
    Afcaf = 0.3{dimensionless}+0.6{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/10{millivolt}));
    Afcas = 1{dimensionless}-Afcaf;
    ode(fcaf, time) = (fcass-fcaf)/tfcaf;
    ode(fcas, time) = (fcass-fcas)/tfcas;
    fca = Afcaf*fcaf+Afcas*fcas;
    tjca = 75{millisecond};
    ode(jca, time) = (fcass-jca)/tjca;
    tffp = 2.5{dimensionless}*tff;
    ode(ffp, time) = (fss-ffp)/tffp;
    fp = Aff*ffp+Afs*fs;
    tfcafp = 2.5{dimensionless}*tfcaf;
    ode(fcafp, time) = (fcass-fcafp)/tfcafp;
    fcap = Afcaf*fcafp+Afcas*fcas;
    km2n = jca*1{per_millisecond};
    anca = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/cass, 4{dimensionless}));
    ode(nca, time) = anca*k2n-nca*km2n;
    PhiCaL = 4{per_millivolt}*vffrt*(cass*exp(2{dimensionless}*vfrt)-0.341{per_millimolar}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa = 1{dimensionless}*vffrt*(0.75{dimensionless}*nass*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK = 1{dimensionless}*vffrt*(0.75{dimensionless}*kss*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PCa = sel
      case celltype == 1{dimensionless}:
        PCa_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_b*2.5{dimensionless};
      otherwise:
        PCa_b;
    endsel;
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 0.00125{dimensionless}*PCa;
    PCaK = 3.574e-4{dimensionless}*PCa;
    PCaNap = 0.00125{dimensionless}*PCap;
    PCaKp = 3.574e-4{dimensionless}*PCap;
    fICaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    ICaL = (1{dimensionless}-fICaLp)*PCa*PhiCaL*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCap*PhiCaL*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaNa = (1{dimensionless}-fICaLp)*PCaNa*PhiCaNa*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaNap*PhiCaNa*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaK = (1{dimensionless}-fICaLp)*PCaK*PhiCaK*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaKp*PhiCaK*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
  enddef;

  def comp IKr as
    var GKr_b:  {init: 0.046};
    var GKr: ;
    var xrss: ;
    var txrf: ;
    var txrs: ;
    var Axrf: ;
    var Axrs: ;
    var xrf:  {init: 0};
    var xrs:  {init: 0};
    var xr: ;
    var rkr: ;
    var v:  {interface: public};
    var time:  {interface: public};
    var celltype:  {interface: public};
    var EK:  {interface: public};
    var ko:  {interface: public};
    var IKr:  {interface: public};
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(v+8.337{millivolt})/6.789{millivolt}));
    txrf = 12.98{millisecond}+1{millisecond}/(0.3652{dimensionless}*exp((v-31.66{millivolt})/3.869{millivolt})+4.123e-5{dimensionless}*exp(-(v-47.78{millivolt})/20.38{millivolt}));
    txrs = 1.865{millisecond}+1{millisecond}/(0.06629{dimensionless}*exp((v-34.7{millivolt})/7.355{millivolt})+1.128e-5{dimensionless}*exp(-(v-29.74{millivolt})/25.94{millivolt}));
    Axrf = 1{dimensionless}/(1{dimensionless}+exp((v+54.81{millivolt})/38.21{millivolt}));
    Axrs = 1{dimensionless}-Axrf;
    ode(xrf, time) = (xrss-xrf)/txrf;
    ode(xrs, time) = (xrss-xrs)/txrs;
    xr = Axrf*xrf+Axrs*xrs;
    rkr = 1{dimensionless}/(1{dimensionless}+exp((v+55{millivolt})/75{millivolt}))*1{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/30{millivolt}));
    GKr = sel
      case celltype == 1{dimensionless}:
        GKr_b*1.3{dimensionless};
      case celltype == 2{dimensionless}:
        GKr_b*0.8{dimensionless};
      otherwise:
        GKr_b;
    endsel;
    IKr = GKr*sqrt(ko/5.4{millimolar})*xr*rkr*(v-EK);
  enddef;

  def comp IKs as
    var GKs_b:  {init: 0.0034};
    var GKs: ;
    var xs1ss: ;
    var xs2ss: ;
    var txs1: ;
    var xs1:  {init: 0};
    var xs2:  {init: 0};
    var KsCa: ;
    var v:  {interface: public};
    var time:  {interface: public};
    var celltype:  {interface: public};
    var EKs:  {interface: public};
    var IKs:  {interface: public};
    var txs2: ;
    var cai:  {interface: public};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+11.6{millivolt})/8.932{millivolt}));
    txs1 = 817.3{millisecond}+1{millisecond}/(2.326e-4{dimensionless}*exp((v+48.28{millivolt})/17.8{millivolt})+0.001292{dimensionless}*exp(-(v+210{millivolt})/230{millivolt}));
    ode(xs1, time) = (xs1ss-xs1)/txs1;
    xs2ss = xs1ss;
    txs2 = 1{millisecond}/(0.01{dimensionless}*exp((v-50{millivolt})/20{millivolt})+0.0193{dimensionless}*exp(-(v+66.54{millivolt})/31{millivolt}));
    ode(xs2, time) = (xs2ss-xs2)/txs2;
    KsCa = 1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/cai, 1.4{dimensionless}));
    GKs = sel
      case celltype == 1{dimensionless}:
        GKs_b*1.4{dimensionless};
      otherwise:
        GKs_b;
    endsel;
    IKs = GKs*KsCa*xs1*xs2*(v-EKs);
  enddef;

  def comp IK1 as
    var GK1: ;
    var GK1_b:  {init: 0.1908};
    var xk1ss: ;
    var txk1: ;
    var xk1:  {init: 1};
    var rk1: ;
    var v:  {interface: public};
    var time:  {interface: public};
    var celltype:  {interface: public};
    var EK:  {interface: public};
    var ko:  {interface: public};
    var IK1:  {interface: public};
    xk1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+2.5538{millivolt_per_millimole}*ko+144.59{millivolt})/(1.5692{millivolt_per_millimole}*ko+3.8115{millivolt})));
    txk1 = 122.2{millisecond}/(exp(-(v+127.2{millivolt})/20.36{millivolt})+exp((v+236.8{millivolt})/69.33{millivolt}));
    ode(xk1, time) = (xk1ss-xk1)/txk1;
    rk1 = 1{dimensionless}/(1{dimensionless}+exp((v+105.8{millivolt}-2.6{millivolt_per_millimole}*ko)/9.493{millivolt}));
    GK1 = sel
      case celltype == 1{dimensionless}:
        GK1_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        GK1_b*1.3{dimensionless};
      otherwise:
        GK1_b;
    endsel;
    IK1 = GK1*sqrt(ko)*rk1*xk1*(v-EK);
  enddef;

  def comp INaCa_i as
    var kna1:  {init: 15};
    var kna2:  {init: 5};
    var kna3:  {init: 88.12};
    var kasymm:  {init: 12.5};
    var wna:  {init: 6e4};
    var wca:  {init: 6e4};
    var wnaca:  {init: 5e3};
    var kcaon:  {init: 1.5e6};
    var kcaoff:  {init: 5e3};
    var qna:  {init: 0.5224};
    var qca:  {init: 0.167};
    var hna: ;
    var hca: ;
    var zca:  {interface: public};
    var KmCaAct:  {init: 150e-6};
    var zna:  {interface: public};
    var Gncx_b:  {init: 0.0008};
    var Gncx: ;
    var R:  {interface: public};
    var T:  {interface: public};
    var F:  {interface: public};
    var v:  {interface: public};
    var nai:  {interface: public};
    var nass:  {interface: public};
    var cass:  {interface: public};
    var nao:  {interface: public};
    var cai:  {interface: public};
    var cao:  {interface: public};
    var h1_i: ;
    var h2_i: ;
    var h3_i: ;
    var h4_i: ;
    var h5_i: ;
    var h6_i: ;
    var h7_i: ;
    var h8_i: ;
    var h9_i: ;
    var h10_i: ;
    var h11_i: ;
    var h12_i: ;
    var k1_i: ;
    var k2_i: ;
    var k3p_i: ;
    var k3pp_i: ;
    var k3_i: ;
    var k4_i: ;
    var k4p_i: ;
    var k4pp_i: ;
    var k5_i: ;
    var k6_i: ;
    var k7_i: ;
    var k8_i: ;
    var x1_i: ;
    var x2_i: ;
    var x3_i: ;
    var x4_i: ;
    var E1_i: ;
    var E2_i: ;
    var E3_i: ;
    var E4_i: ;
    var allo_i: ;
    var JncxNa_i: ;
    var JncxCa_i: ;
    var celltype:  {interface: public};
    var INaCa_i:  {interface: public};
    var INaCa_ss:  {interface: public};
    var h1_ss: ;
    var h2_ss: ;
    var h3_ss: ;
    var h4_ss: ;
    var h5_ss: ;
    var h6_ss: ;
    var h7_ss: ;
    var h8_ss: ;
    var h9_ss: ;
    var h10_ss: ;
    var h11_ss: ;
    var h12_ss: ;
    var k1_ss: ;
    var k2_ss: ;
    var k3p_ss: ;
    var k3pp_ss: ;
    var k3_ss: ;
    var k4_ss: ;
    var k4p_ss: ;
    var k4pp_ss: ;
    var k5_ss: ;
    var k6_ss: ;
    var k7_ss: ;
    var k8_ss: ;
    var x1_ss: ;
    var x2_ss: ;
    var x3_ss: ;
    var x4_ss: ;
    var E1_ss: ;
    var E2_ss: ;
    var E3_ss: ;
    var E4_ss: ;
    var allo_ss: ;
    var JncxNa_ss: ;
    var JncxCa_ss: ;
    hca = exp(qca*v*F/(R*T));
    hna = exp(qna*v*F/(R*T));
    h1_i = 1{dimensionless}+nai/kna3*(1{dimensionless}+hna);
    h2_i = nai*hna/(kna3*h1_i);
    h3_i = 1{dimensionless}/h1_i;
    h4_i = 1{dimensionless}+nai/kna1*(1{dimensionless}+nai/kna2);
    h5_i = nai*nai/(h4_i*kna1*kna2);
    h6_i = 1{dimensionless}/h4_i;
    h7_i = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*cai*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cai));
    JncxNa_i = 3{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    Gncx = sel
      case celltype == 1{dimensionless}:
        Gncx_b*1.1{dimensionless};
      case celltype == 2{dimensionless}:
        Gncx_b*1.4{dimensionless};
      otherwise:
        Gncx_b;
    endsel;
    INaCa_i = 0.8{dimensionless}*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nass/kna3*(1{dimensionless}+hna);
    h2_ss = nass*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nass/kna1*(1{dimensionless}+nass/kna2);
    h5_ss = nass*nass/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*cass*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cass));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = 0.2{dimensionless}*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
  enddef;

  def comp INaK as
    var k1p:  {init: 949.5};
    var k1m:  {init: 182.4};
    var k2p:  {init: 687.2};
    var k2m:  {init: 39.4};
    var k3p:  {init: 1899};
    var k3m:  {init: 79300};
    var k4p:  {init: 639};
    var k4m:  {init: 40};
    var Knai0:  {init: 9.073};
    var Knao0:  {init: 27.78};
    var delta:  {init: -0.155};
    var Kki:  {init: 0.5};
    var Kko:  {init: 0.3582};
    var MgADP:  {init: 0.05};
    var MgATP:  {init: 9.8};
    var Kmgatp:  {init: 1.698e-7};
    var H:  {init: 1e-7};
    var eP:  {init: 4.2};
    var Khp:  {init: 1.698e-7};
    var Knap:  {init: 224};
    var Kxkur:  {init: 292};
    var zk:  {interface: public};
    var zna:  {interface: public};
    var Pnak_b:  {init: 30};
    var Pnak: ;
    var celltype:  {interface: public};
    var R:  {interface: public};
    var T:  {interface: public};
    var F:  {interface: public};
    var v:  {interface: public};
    var nai:  {interface: public};
    var ki:  {interface: public};
    var nao:  {interface: public};
    var ko:  {interface: public};
    var Knai: ;
    var Knao: ;
    var P: ;
    var a1: ;
    var b1: ;
    var a2: ;
    var b2: ;
    var a3: ;
    var b3: ;
    var a4: ;
    var b4: ;
    var x1: ;
    var x2: ;
    var x3: ;
    var x4: ;
    var E1: ;
    var E2: ;
    var E3: ;
    var E4: ;
    var JnakNa: ;
    var JnakK: ;
    var INaK:  {interface: public};
    Knai = Knai0*exp(delta*v*F/(3{dimensionless}*R*T));
    Knao = Knao0*exp((1{dimensionless}-delta)*v*F/(3{dimensionless}*R*T));
    P = eP/(1{dimensionless}+H/Khp+nai/Knap+ki/Kxkur);
    a1 = k1p*pow(nai/Knai, 3{dimensionless})/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    b1 = k1m*MgADP;
    a2 = k2p;
    b2 = k2m*pow(nao/Knao, 3{dimensionless})/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    a3 = k3p*sqr(ko/Kko)/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    b3 = k3m*P*H/(1{dimensionless}+MgATP/Kmgatp);
    a4 = k4p*MgATP/Kmgatp/(1{dimensionless}+MgATP/Kmgatp);
    b4 = k4m*sqr(ki/Kki)/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    x1 = a4*a1*a2+b2*b4*b3+a2*b4*b3+b3*a1*a2;
    x2 = b2*b1*b4+a1*a2*a3+a3*b1*b4+a2*a3*b4;
    x3 = a2*a3*a4+b3*b2*b1+b2*b1*a4+a3*a4*b1;
    x4 = b4*b3*b2+a3*a4*a1+b2*a4*a1+b3*b2*a1;
    E1 = x1/(x1+x2+x3+x4);
    E2 = x2/(x1+x2+x3+x4);
    E3 = x3/(x1+x2+x3+x4);
    E4 = x4/(x1+x2+x3+x4);
    JnakNa = 3{dimensionless}*(E1*a3-E2*b3);
    JnakK = 2{dimensionless}*(E4*b1-E3*a1);
    Pnak = sel
      case celltype == 1{dimensionless}:
        Pnak_b*0.9{dimensionless};
      case celltype == 2{dimensionless}:
        Pnak_b*0.7{dimensionless};
      otherwise:
        Pnak_b;
    endsel;
    INaK = Pnak*(zna*JnakNa+zk*JnakK);
  enddef;

  def comp IKb as
    var xkb: ;
    var GKb_b:  {init: 0.003};
    var GKb: ;
    var v:  {interface: public};
    var EK:  {interface: public};
    var celltype:  {interface: public};
    var IKb:  {interface: public};
    xkb = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.48{millivolt})/18.34{millivolt}));
    GKb = sel
      case celltype == 1{dimensionless}:
        GKb_b*0.6{dimensionless};
      otherwise:
        GKb_b;
    endsel;
    IKb = GKb*xkb*(v-EK);
  enddef;

  def comp INab as
    var PNab:  {init: 3.75e-10};
    var INab:  {interface: public};
    var nai:  {interface: public};
    var nao:  {interface: public};
    var vffrt:  {interface: public};
    var vfrt:  {interface: public};
    INab = PNab*vffrt*(nai*exp(vfrt)-nao)/(exp(vfrt)-1{dimensionless});
  enddef;

  def comp ICab as
    var PCab:  {init: 2.5e-8};
    var ICab:  {interface: public};
    var cai:  {interface: public};
    var cao:  {interface: public};
    var vffrt:  {interface: public};
    var vfrt:  {interface: public};
    ICab = PCab*4{dimensionless}*vffrt*(cai*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
  enddef;

  def comp IpCa as
    var GpCa:  {init: 0.0005};
    var KmCap:  {init: 0.0005};
    var IpCa:  {interface: public};
    var cai:  {interface: public};
    IpCa = GpCa*cai/(KmCap+cai);
  enddef;

  def comp diff as
    var cai:  {interface: public};
    var cass:  {interface: public};
    var nai:  {interface: public};
    var nass:  {interface: public};
    var ki:  {interface: public};
    var kss:  {interface: public};
    var JdiffNa:  {interface: public};
    var Jdiff:  {interface: public};
    var JdiffK:  {interface: public};
    JdiffNa = (nass-nai)/2{dimensionless};
    JdiffK = (kss-ki)/2{dimensionless};
    Jdiff = (cass-cai)/0.2{dimensionless};
  enddef;

  def comp ryr as
    var bt:  {init: 4.75};
    var a_rel: ;
    var Jrel_inf: ;
    var tau_rel: ;
    var celltype:  {interface: public};
    var ICaL:  {interface: public};
    var cajsr:  {interface: public};
    var Jrel_infp: ;
    var Jrel_temp: ;
    var tau_relp: ;
    var Jrelnp:  {init: 0};
    var Jrelp:  {init: 0};
    var time:  {interface: public};
    var btp: ;
    var a_relp: ;
    var KmCaMK:  {interface: public};
    var CaMKa:  {interface: public};
    var Jrel_inf_temp: ;
    var fJrelp: ;
    var Jrel:  {interface: public};
    var tau_rel_temp: ;
    var tau_relp_temp: ;
    a_rel = 0.5{dimensionless}*bt;
    Jrel_inf_temp = a_rel*(-ICaL)/(1{microA_per_microF}+1{microA_per_microF}*pow(1.5{millimolar}/cajsr, 8{dimensionless}));
    Jrel_inf = sel
      case celltype == 2{dimensionless}:
        Jrel_inf_temp*1.7{dimensionless};
      otherwise:
        Jrel_inf_temp;
    endsel;
    tau_rel_temp = bt/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_rel = sel
      case tau_rel_temp < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_rel_temp;
    endsel;
    ode(Jrelnp, time) = (Jrel_inf-Jrelnp)/tau_rel;
    btp = 1.25{dimensionless}*bt;
    a_relp = 0.5{dimensionless}*btp;
    Jrel_temp = a_relp*(-ICaL)/(1{dimensionless}+pow(1.5{millimolar}/cajsr, 8{dimensionless}));
    Jrel_infp = sel
      case celltype == 2{dimensionless}:
        Jrel_temp*1.7{dimensionless};
      otherwise:
        Jrel_temp;
    endsel;
    tau_relp_temp = btp/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_relp = sel
      case tau_relp_temp < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_relp_temp;
    endsel;
    ode(Jrelp, time) = (Jrel_infp-Jrelp)/tau_relp;
    fJrelp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jrel = (1{dimensionless}-fJrelp)*Jrelnp+fJrelp*Jrelp;
  enddef;

  def comp SERCA as
    var upScale: ;
    var Jupnp: ;
    var Jupp: ;
    var KmCaMK:  {interface: public};
    var CaMKa:  {interface: public};
    var celltype:  {interface: public};
    var cai:  {interface: public};
    var cansr:  {interface: public};
    var fJupp: ;
    var Jleak: ;
    var Jup:  {interface: public};
    upScale = sel
      case celltype == 1{dimensionless}:
        1.3{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    Jupnp = upScale*0.004375{dimensionless}*cai/(cai+0.00092{millimolar});
    Jupp = upScale*2.75{dimensionless}*0.004375{dimensionless}*cai/(cai+0.00092{millimolar}-0.00017{millimolar});
    fJupp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jleak = 0.0039375{millimolar_per_millisecond}*cansr/15{millimolar};
    Jup = (1{dimensionless}-fJupp)*Jupnp+fJupp*Jupp-Jleak;
  enddef;

  def comp trans_flux as
    var cansr:  {interface: public};
    var cajsr:  {interface: public};
    var Jtr:  {interface: public};
    Jtr = (cansr-cajsr)/100{millisecond};
  enddef;
  def map between intracellular_ions and INaL for
    vars INaL and INaL;
  enddef;
  def map between intracellular_ions and membrane for
    vars Istim and Istim;
  enddef;
  def map between intracellular_ions and trans_flux for
    vars cajsr and cajsr;
    vars cansr and cansr;
    vars Jtr and Jtr;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    vars cansr and cansr;
    vars Jup and Jup;
  enddef;
  def map between SERCA and environment for
    vars celltype and celltype;
  enddef;
  def map between SERCA and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between intracellular_ions and ryr for
    vars cajsr and cajsr;
    vars Jrel and Jrel;
  enddef;
  def map between ICaL and ryr for
    vars ICaL and ICaL;
  enddef;
  def map between ryr and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between ryr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between intracellular_ions and diff for
    vars cai and cai;
    vars cass and cass;
    vars nai and nai;
    vars nass and nass;
    vars ki and ki;
    vars kss and kss;
    vars JdiffK and JdiffK;
    vars Jdiff and Jdiff;
    vars JdiffNa and JdiffNa;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between intracellular_ions and IpCa for
    vars cai and cai;
    vars IpCa and IpCa;
  enddef;
  def map between extracellular and ICab for
    vars cao and cao;
  enddef;
  def map between intracellular_ions and ICab for
    vars cai and cai;
    vars ICab and ICab;
  enddef;
  def map between ICab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICab and ICab;
  enddef;
  def map between extracellular and INab for
    vars nao and nao;
  enddef;
  def map between intracellular_ions and INab for
    vars nai and nai;
    vars INab and INab;
  enddef;
  def map between INab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars INab and INab;
  enddef;
  def map between IKb and membrane for
    vars v and v;
    vars IKb and IKb;
  enddef;
  def map between IKb and environment for
    vars celltype and celltype;
  enddef;
  def map between IKb and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and IKb for
    vars IKb and IKb;
  enddef;
  def map between intracellular_ions and INaK for
    vars ki and ki;
    vars nai and nai;
    vars INaK and INaK;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars INaK and INaK;
  enddef;
  def map between INaK and environment for
    vars celltype and celltype;
  enddef;
  def map between INaK and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zk and zk;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between intracellular_ions and INaCa_i for
    vars cai and cai;
    vars nai and nai;
    vars nass and nass;
    vars cass and cass;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and membrane for
    vars v and v;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and environment for
    vars celltype and celltype;
  enddef;
  def map between INaCa_i and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zca and zca;
  enddef;
  def map between extracellular and INaCa_i for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and IKs for
    vars cai and cai;
    vars IKs and IKs;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
    vars IK1 and IK1;
  enddef;
  def map between IK1 and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars IKs and IKs;
  enddef;
  def map between IKs and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between Ito and membrane for
    vars v and v;
    vars Ito and Ito;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars INaL and INaL;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars IKr and IKr;
  enddef;
  def map between IKr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between INaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between INaL and INa for
    vars tm and tm;
  enddef;
  def map between INaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between ICaL and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICaL and ICaL;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cass and cass;
    vars nass and nass;
    vars kss and kss;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
    vars ICaL and ICaL;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between intracellular_ions and INa for
    vars INa and INa;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars INa and INa;
  enddef;
  def map between CaMK and INa for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and CaMK for
    vars cass and cass;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars Acap and Acap;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vnsr and vnsr;
    vars vjsr and vjsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nai and nai;
    vars ki and ki;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars ko and ko;
  enddef;
enddef;
